PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = mock_study
  keyboardBackend = PsychToolbox
  logging level = data
  measureFrameRate = False
  runMode = 1
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Routines
  Routine WelcomeScreen
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    TextComponent textWelcomeMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the user study

        On the following screen, you will see a query image on the left, and will choose from the images on the right which is the same.

        Press 'SPACE' to start
    KeyboardComponent key_Continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent grouping
      Code Type = Both
      Begin Experiment:
        import random
        import time

        random.seed(time.time())

        # group = random.choice(['color_only', 'grayscale_only', 'both_blocks'])

        # group = 'color_only'
        # group = 'gray_only
        group = 'both_blocks'

        thisExp.addData("assigned_group", group)
      Begin JS Experiment:
        const groups = ["color_only", "grayscale_only", "both_blocks"];
        const group = groups[Math.floor(Math.random() * groups.length)];

        psychoJS.experiment.addData("assigned_group", group);
        console.log("Assigned group:", group);
  Routine EndScreen
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    TextComponent textEndMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for completing!
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  Routine blank500
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine trialColor
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    MouseComponent mouse
      clickable = image1, image2, image3, image4, image5
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
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    ImageComponent imageQuery
      image [set every repeat] = $hotel_query
      pos = (-0.55, 0)
      size = (0.48, 0.257)
      startVal [time (s)] = 0.0
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    ImageComponent image1
      image [set every repeat] = $choice1
      pos = (0.35, -0.3)
      size = (0.445, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image2
      image [set every repeat] = $choice2
      pos = (0.1, 0.3)
      size = (0.445, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image3
      image [set every repeat] = $choice3
      pos = (0.6, 0.3)
      size = (0.445, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image4
      image [set every repeat] = $choice4
      pos = (0.1, 0)
      size = (0.445, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image5
      image [set every repeat] = $choice5
      pos = (0.6, 0)
      size = (0.445, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent colorCorrect
      Code Type = Auto->JS
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      Each Frame:
        clickable_objects = [image1, image2, image3, image4, image5]

        for obj in clickable_objects:
            if obj.contains(mouse) and mouse.getPressed()[0]:
                clicked_img = obj.image  # This gives the filename like 'images/hotel2_sample4.png'
                thisExp.addData("clicked_image", clicked_img)
                thisExp.addData("correct_answer", correct_answer)
                thisExp.addData("isCorrect", int(clicked_img == correct_answer))
                continueRoutine = False
                break
    TextComponent queryCaption
      letterHeight = 0.05
      pos = (-0.55, 0.2)
      startVal [time (s)] = 0.0
      text = Query Image
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  Routine NextScreen
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    TextComponent textNextScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Use the Button to change between color and grayscale

        Press 'SPACE' to continue
    KeyboardComponent key_NextScreen
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine confidenceScreen
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    TextComponent text_confidenceQuestion
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = How confident do you feel your selected image was correct?
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = 1, 2, 3, 4, 5
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ButtonComponent buttonAdvance
      bold = True
      forceEndRoutine = True
      letterHeight = 0.035
      pos = (0, -0.45)
      size = (0.2, 0.065)
      startVal [time (s)] = 0
      text = Submit
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  Routine trialGray_Color
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  Routine trialColor_Gray
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    MouseComponent mouse_2
      clickable = image1, image2, image3, image4, image5
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
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    ImageComponent imageQuery_2
      image [set every repeat] = $hotel_query
      pos = (-0.55, 0)
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image1_2
      image [set every repeat] = $choice1
      pos = (0.35, -0.25)
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image2_2
      image [set every repeat] = $choice2
      pos = (0.1, 0.25)
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image3_2
      image [set every repeat] = $choice3
      pos = (0.6, 0.25)
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image4_2
      image [set every repeat] = $choice4
      pos = (0.1, 0)
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image5_2
      image [set every repeat] = $choice5
      pos = (0.6, 0)
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    CodeComponent toggleGray
      Code Type = Auto->JS
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      Begin Routine:
        color_paths = [choice1, choice2, choice3, choice4, choice5]
        grayscale_paths = [gray1, gray2, gray3, gray4, gray5]

        toggle_button.toggleGray = False  # Set the toggle state ON the button object

        image1_2.setImage(color_paths[0])
        image2_2.setImage(color_paths[1])
        image3_2.setImage(color_paths[2])
        image4_2.setImage(color_paths[3])
        image5_2.setImage(color_paths[4])
      Each Frame:
        clickable_objects = [image1_2, image2_2, image3_2, image4_2, image5_2]

        for obj in clickable_objects:
            if obj.contains(mouse) and mouse.getPressed()[0]:
                clicked_img = obj.image  # This gives the filename like 'images/hotel2_sample4.png'
                thisExp.addData("clicked_image", clicked_img)
                thisExp.addData("correct_answer", correct_answer)
                thisExp.addData("isCorrect", int(clicked_img == correct_answer))
                continueRoutine = False
                break
    ButtonComponent toggle_button
      bold = True
      borderColor = 0.9608, 0.8431, 0.6863
      borderWidth = 0.1
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (-0.55, -0.25)
      size = (0.45, 0.125)
      startVal [time (s)] = 0
      text = Toggle Color/Grayscale
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      callback:
        toggle_button.toggleGray = not toggle_button.toggleGray

        if toggle_button.toggleGray:
            image1_2.setImage(grayscale_paths[0])
            image2_2.setImage(grayscale_paths[1])
            image3_2.setImage(grayscale_paths[2])
            image4_2.setImage(grayscale_paths[3])
            image5_2.setImage(grayscale_paths[4])

             # Change button background color to darker to indicate grayscale
            toggle_button.color = [0.5, 0.5, 0.5]  # RGB in 0–1 range (gray)

        else:
            image1_2.setImage(color_paths[0])
            image2_2.setImage(color_paths[1])
            image3_2.setImage(color_paths[2])
            image4_2.setImage(color_paths[3])
            image5_2.setImage(color_paths[4])

           # Change button background back to lighter
            toggle_button.color = [0.8, 0.8, 0.8]  # light gray
    TextComponent queryCaption_GC
      letterHeight = 0.05
      pos = (-0.55, 0.2)
      startVal [time (s)] = 0.0
      text = Query Image
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  Routine trialGrayscale
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    MouseComponent mouse_3
      clickable = image1, image2, image3, image4, image5
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent queryImage_2
      image [set every repeat] = $hotel_query
      pos = (-0.55, 0)
      size = (0.48, 0.257)
      startVal [time (s)] = 0.0
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    ImageComponent image1_3
      image [set every repeat] = $gray1
      pos = (0.35, -0.3)
      size = (0.445, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image2_3
      image [set every repeat] = $gray2
      pos = (0.1, 0.3)
      size = (0.445, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image3_3
      image [set every repeat] = $gray3
      pos = (0.6, 0.3)
      size = (0.445, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image4_3
      image [set every repeat] = $gray4
      pos = (0.1, 0)
      size = (0.445, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image5_3
      image [set every repeat] = $gray5
      pos = (0.6, 0)
      size = (0.445, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent grayCorrect
      Code Type = Auto->JS
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      Each Frame:
        clickable_objects = [image1_3, image2_3, image3_3, image4_3, image5_3]

        for obj in clickable_objects:
            if obj.contains(mouse) and mouse.getPressed()[0]:
                clicked_img = obj.image  # This gives the filename like 'images/hotel2_sample4.png'
                thisExp.addData("clicked_image", clicked_img)
                thisExp.addData("correct_answer", correct_answer)
                thisExp.addData("isCorrect", int(clicked_img == correct_answer))
                continueRoutine = False
                break
    TextComponent queryCaption_gray
      letterHeight = 0.05
      pos = (-0.55, 0.2)
      startVal [time (s)] = 0.0
      text = Query Image
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Flow
  Routine WelcomeScreen
  LoopInitiator colorBlock loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1 if group == 'color_only' else 0 
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    LoopInitiator trialsColor loopType="TrialHandler"
      conditionsFile = hotel_color.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'hotel_query': 'images/hotel1_query.jpg', 'choice1': 'images/hotel1_sample1.jpg', 'choice2': 'images/hotel1_sample2.jpeg', 'choice3': 'images/hotel1_sample3.jpg', 'choice4': 'images/hotel1_correct.jpg', 'choice5': 'images/hotel1_sample4.jpg', 'correct_answer': 'images/hotel1_correct.jpg', 'gray1': 'images/hotel1_gray1.jpg', 'gray2': 'images/hotel1_gray2.jpeg', 'gray3': 'images/hotel1_gray3.jpg', 'gray4': 'images/hotel1_correctGray.jpg', 'gray5': 'images/hotel1_gray4.jpg'},
        {'hotel_query': 'images/hotel2_query.jpg', 'choice1': 'images/hotel2_sample1.JPEG', 'choice2': 'images/hotel2_correct.jpg', 'choice3': 'images/hotel2_sample2.jpg', 'choice4': 'images/hotel2_sample3.jpg', 'choice5': 'images/hotel2_sample4.jpeg', 'correct_answer': 'images/hotel2_correct.jpg', 'gray1': 'images/hotel2_gray1.JPEG', 'gray2': 'images/hotel2_correctGray.jpg', 'gray3': 'images/hotel2_gray2.jpg', 'gray4': 'images/hotel2_gray3.jpg', 'gray5': 'images/hotel2_gray4.jpeg'},
        {'hotel_query': 'images/hotel3_query.jpg', 'choice1': 'images/hotel3_correct.jpg', 'choice2': 'images/hotel3_sample1.jpg', 'choice3': 'images/hotel3_sample2.jpeg', 'choice4': 'images/hotel3_sample3.jpg', 'choice5': 'images/hotel3_sample4.jpg', 'correct_answer': 'images/hotel3_correct.jpg', 'gray1': 'images/hotel3_correctGray.jpg', 'gray2': 'images/hotel3_gray1.jpg', 'gray3': 'images/hotel3_gray2.jpeg', 'gray4': 'images/hotel3_gray3.jpg', 'gray5': 'images/hotel3_gray4.jpg'},
        {'hotel_query': 'images/hotel4_query.jpg', 'choice1': 'images/hotel4_sample1.jpg', 'choice2': 'images/hotel4_sample2.jpg', 'choice3': 'images/hotel4_sample3.jpg', 'choice4': 'images/hotel4_sample4.jpg', 'choice5': 'images/hotel4_correct.jpg', 'correct_answer': 'images/hotel4_correct.jpg', 'gray1': 'images/hotel4_gray1.jpg', 'gray2': 'images/hotel4_gray2.jpg', 'gray3': 'images/hotel4_gray3.jpg', 'gray4': 'images/hotel4_gray4.jpg', 'gray5': 'images/hotel4_correctGray.jpg'}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
      Routine trialColor
      Routine blank500
    LoopTerminator trialsColor
    Routine confidenceScreen
  LoopTerminator colorBlock
  LoopInitiator grayBlock loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1 if group == 'gray_only' else 0 
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    LoopInitiator trialsGray loopType="TrialHandler"
      conditionsFile = hotel_color.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'hotel_query': 'images/hotel1_query', 'choice1': 'images/hotel1_sample1', 'choice2': 'images/hotel1_sample2', 'choice3': 'images/hotel1_sample3', 'choice4': 'images/hotel1_correct', 'choice5': 'images/hotel1_sample4', 'correct_answer': 'images/hotel1_correct', 'gray1': 'images/hotel1_gray1', 'gray2': 'images/hotel1_gray2', 'gray3': 'images/hotel1_gray3', 'gray4': 'images/hotel1_correctGray', 'gray5': 'images/hotel1_gray4'},
        {'hotel_query': 'images/hotel2_query', 'choice1': 'images/hotel2_sample1', 'choice2': 'images/hotel2_correct', 'choice3': 'images/hotel2_sample2', 'choice4': 'images/hotel2_sample3', 'choice5': 'images/hotel2_sample4', 'correct_answer': 'images/hotel2_correct', 'gray1': 'images/hotel2_gray1', 'gray2': 'images/hotel2_correctGray', 'gray3': 'images/hotel2_gray2', 'gray4': 'images/hotel2_gray3', 'gray5': 'images/hotel2_gray4'},
        {'hotel_query': 'images/hotel3_query', 'choice1': 'images/hotel3_correct', 'choice2': 'images/hotel3_sample1', 'choice3': 'images/hotel3_sample2', 'choice4': 'images/hotel3_sample3', 'choice5': 'images/hotel3_sample4', 'correct_answer': 'images/hotel3_correct', 'gray1': 'images/hotel3_correctGray', 'gray2': 'images/hotel3_gray1', 'gray3': 'images/hotel3_gray2', 'gray4': 'images/hotel3_gray3', 'gray5': 'images/hotel3_gray4'},
        {'hotel_query': 'images/hotel4_query', 'choice1': 'images/hotel4_sample1', 'choice2': 'images/hotel4_sample2', 'choice3': 'images/hotel4_sample3', 'choice4': 'images/hotel4_sample4', 'choice5': 'images/hotel4_correct', 'correct_answer': 'images/hotel4_correct', 'gray1': 'images/hotel4_gray1', 'gray2': 'images/hotel4_gray2', 'gray3': 'images/hotel4_gray3', 'gray4': 'images/hotel4_gray4', 'gray5': 'images/hotel4_correctGray'}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
      Routine trialGrayscale
      Routine blank500
    LoopTerminator trialsGray
    Routine confidenceScreen
  LoopTerminator grayBlock
  LoopInitiator bothBlock loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1 if group == 'both_blocks' else 0
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    Routine NextScreen
    LoopInitiator trialsGray_Color loopType="TrialHandler"
      conditionsFile = hotel_color.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine trialColor_Gray
      Routine blank500
    LoopTerminator trialsGray_Color
    Routine confidenceScreen
  LoopTerminator bothBlock
  Routine EndScreen
